PsychoPy2experiment version="2025.1.1"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  consoleLoggingLevel = data
  expName = memoryexp_recall_word_input
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial_Word_Display
    RoutineSettingsComponent trial_Word_Display
      saveStartStop = False
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    TextComponent trial_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Words
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  Routine consent
    RoutineSettingsComponent consent
      saveStartStop = False
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    KeyboardComponent consent_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent consent_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This experiment is designed to observe the "Suffix Effect,"
        a phenomenon related to memory.

        It is not a performance assessment. You may exit the study at any time without providing a reason.

        To continue, press the "Y" key.
        To quit, press the "N" key.
    CodeComponent code_consent
      Code Type = Py
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      Begin Experiment:
        from psychopy import prefs
        prefs.hardware['audioLib'] = ['sounddevice', 'pyo', 'pygame']
      End Routine:
        if consent_resp.keys == "y":
            consent_given = 1
            consent_not_given = 0
        elif consent_resp.keys == "n":
            consent_given = 0
            consent_not_given = 1

        event.clearEvents(eventType='keyboard')
  Routine tutorial
    RoutineSettingsComponent tutorial
      saveStartStop = False
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    TextComponent text_Tutorial
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Our experiment consists of two repeating sections.

        In the first section, a series of words will appear sequentially on the screen. You will be asked to memorize these words as they are displayed.

        In the second phase, you must type these words on the screen and press the "ENTER" key. After typing each word you recall, press "ENTER." You may begin typing once the screen turns green. You will have two minutes for this section, but you can skip ahead at any time by pressing the "LEFT MOUSE" button.

        You will repeat these two sections four times in total. Before the main task, you will complete a short practice trial.

        To proceed, press the "Y" key to advance to the practice section.
    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      End Routine:
        event.clearEvents(eventType='keyboard')
  Routine bye_message
    RoutineSettingsComponent bye_message
      saveStartStop = False
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    TextComponent text_Bye
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        You have NOT given consent

        Thanks for attending
    CodeComponent code_terminate
      Code Type = Py
      End Routine:
        quit(thisExp)
  Routine proceed_study
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    TextComponent bridge_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        YOU HAVE COMPLATED THE TRIAL PART.

        Moving on to the experiment.
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 5
      text = LIST 1
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  Routine study_list1
    RoutineSettingsComponent study_list1
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Words
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  Routine recall_Trial
    RoutineSettingsComponent recall_Trial
      color = -1.0000, 0.0039, -1.0000
      saveStartStop = False
      useWindowParams = True
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    CodeComponent code_recall_Trial
      Code Type = Py
      Each Frame:
        # Add time elapsed in THIS iteration to total_time
        total_time = global_clock.getTime()
        # Terminate the loop if total_time exceeds 40 seconds
        if total_time >= time_limit:
            recall_trial.finished = True  # Force the loop to exit
            continueRoutine = False  # Exit the current routine

        if mouse_trial.getPressed()[0]:  # 0 = left, 1 = right, 2 = middle
            continueRoutine = False  # Exit the routine
            recall_trial.finished = True  # Force the loop to exit
            print("Mouse skip clicked! Routine terminated.")
    TextboxComponent textbox_recall_Trial
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_recall_Trial
      allowedKeys = 'return','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse_trial
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine recall_list1
    RoutineSettingsComponent recall_list1
      color = -1.0000, 0.0039, -1.0000
      saveStartStop = False
      useWindowParams = True
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    TextboxComponent list1_recall
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_list_1_recall
      allowedKeys = 'return','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_list_1_recall
      Code Type = Py
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      Each Frame:
        # Add time elapsed in THIS iteration to total_time
        total_time = global_clock.getTime()
        # Terminate the loop if total_time exceeds 40 seconds
        if total_time >= time_limit:
            recall_list_1.finished = True  # Force the loop to exit
            continueRoutine = False  # Exit the current routine

        if mouse_1.getPressed()[0]:  # 0 = left, 1 = right, 2 = middle
            continueRoutine = False  # Exit the routine
            recall_list_1.finished = True  # Force the loop to exit
            print("Mouse skip clicked! Routine terminated.")
    MouseComponent mouse_1
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine study_list2
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Words
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  Routine suffix_play
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    SoundComponent sound_1
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = laminer48.wav
      startVal [time (s)] = 0.0
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  Routine clock_start
    RoutineSettingsComponent clock_start
      saveStartStop = False
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    CodeComponent code_clock_trial
      Code Type = Py
      Begin Experiment:
        total_time = 0.0  # Track cumulative time
        time_limit = 120.0 # 40-second limit
        global_clock = core.Clock()  # Global timer
      Begin Routine:
        global_clock.reset()  # Start the global timer
  Routine clock_start_list_1
    RoutineSettingsComponent clock_start_list_1
      saveStartStop = False
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    CodeComponent code_clock_list_1
      Code Type = Py
      Begin Experiment:
        total_time = 0.0  # Track cumulative time
        time_limit = 120.0 # 40-second limit
        global_clock = core.Clock()  # Global timer
      Begin Routine:
        global_clock.reset()  # Start the global timer
  Routine recall_list2
    RoutineSettingsComponent recall_list2
      color = -1.0000, 0.0039, -1.0000
      useWindowParams = True
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    TextboxComponent list2_recall
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_list_1_recall_2
      allowedKeys = 'return','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_list_1_recall_2
      Code Type = Py
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      Each Frame:
        # Add time elapsed in THIS iteration to total_time
        total_time = global_clock.getTime()
        # Terminate the loop if total_time exceeds 40 seconds
        if total_time >= time_limit:
            recall_list_2.finished = True  # Force the loop to exit
            continueRoutine = False  # Exit the current routine

        if mouse.getPressed()[0]:  # 0 = left, 1 = right, 2 = middle
            continueRoutine = False  # Exit the routine
            recall_list_2.finished = True  # Force the loop to exit
            print("Mouse skip clicked! Routine terminated.")
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine clock_start_list_2
    RoutineSettingsComponent clock_start_list_2
      saveStartStop = False
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    CodeComponent code_clock_list
      Code Type = Py
      Begin Experiment:
        total_time = 0.0  # Track cumulative time
        time_limit = 120.0 # 40-second limit
        global_clock = core.Clock()  # Global timer
      Begin Routine:
        global_clock.reset()  # Start the global timer
  Routine proceed_bridge
    RoutineSettingsComponent proceed_bridge
      saveStartStop = False
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    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = LIST 2
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  Routine study_list3
    RoutineSettingsComponent study_list3
      saveStartStop = False
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    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Words
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  Routine clock_start_list_3
    RoutineSettingsComponent clock_start_list_3
      saveStartStop = False
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    CodeComponent code_clock_list_2
      Code Type = Py
      Begin Experiment:
        total_time = 0.0  # Track cumulative time
        time_limit = 120.0 # 40-second limit
        global_clock = core.Clock()  # Global timer
      Begin Routine:
        global_clock.reset()  # Start the global timer
  Routine recall_list3
    RoutineSettingsComponent recall_list3
      color = -1.0000, 0.0039, -1.0000
      useWindowParams = True
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    TextboxComponent list3_recall
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_list_1_recall_3
      allowedKeys = 'return','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_list_1_recall_3
      Code Type = Py
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      Each Frame:
        # Add time elapsed in THIS iteration to total_time
        total_time = global_clock.getTime()
        # Terminate the loop if total_time exceeds 40 seconds
        if total_time >= time_limit:
            recall_list_3.finished = True  # Force the loop to exit
            continueRoutine = False  # Exit the current routine

        if mouse.getPressed()[0]:  # 0 = left, 1 = right, 2 = middle
            continueRoutine = False  # Exit the routine
            recall_list_3.finished = True  # Force the loop to exit
            print("Mouse skip clicked! Routine terminated.")
    MouseComponent mouse_3
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine proceed_bridge_2
    RoutineSettingsComponent proceed_bridge_2
      saveStartStop = False
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    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = LIST 3
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  Routine proceed_birdge_3
    RoutineSettingsComponent proceed_birdge_3
      saveStartStop = False
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    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = LIST 4
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  Routine study_list4
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Words
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  Routine clock_start_list_4
    RoutineSettingsComponent clock_start_list_4
      saveStartStop = False
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    CodeComponent code_clock_list_3
      Code Type = Py
      Begin Experiment:
        total_time = 0.0  # Track cumulative time
        time_limit = 120.0 # 40-second limit
        global_clock = core.Clock()  # Global timer
      Begin Routine:
        global_clock.reset()  # Start the global timer
  Routine recall_list4
    RoutineSettingsComponent recall_list4
      color = -1.0000, 0.0039, -1.0000
      saveStartStop = False
      useWindowParams = True
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    TextboxComponent list4_recall
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_list_1_recall_4
      allowedKeys = 'return','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_list_1_recall_4
      Code Type = Py
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      Each Frame:
        # Add time elapsed in THIS iteration to total_time
        total_time = global_clock.getTime()
        # Terminate the loop if total_time exceeds 40 seconds
        if total_time >= time_limit:
            recall_list_4.finished = True  # Force the loop to exit
            continueRoutine = False  # Exit the current routine

        if mouse_4.getPressed()[0]:  # 0 = left, 1 = right, 2 = middle
            continueRoutine = False  # Exit the routine
            recall_list_4.finished = True  # Force the loop to exit
            print("Mouse skip clicked! Routine terminated.")
    MouseComponent mouse_4
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = THANK YOU! <3
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    CodeComponent code_script_run
      Code Type = Py
      End Experiment:
        import subprocess

        experimentPath = os.getcwd()
        scriptName = "hello.py"

        scriptPath = os.path.join(experimentPath, scriptName)

        subproces.run(["python",scriptPath])
  Routine suffix_play_2
    RoutineSettingsComponent suffix_play_2
      saveStartStop = False
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    SoundComponent sound_2
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = aktuator48.wav
      startVal [time (s)] = 0.0
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  Routine dep
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    TextboxComponent departmentInput
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent department
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please provide your department, then proceed with "ENTER" key.
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine consent
  LoopInitiator consent_Tutorial loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = consent_given
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    LoopInitiator tutorial_loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      conditions:
        [{'trialWords': 'masa'},
        {'trialWords': 'cam'},
        {'trialWords': 'su'},
        {'trialWords': 'iyilik'},
        {'trialWords': 'tütün'},
        {'trialWords': 'kelime'}]
      Routine tutorial
    LoopTerminator tutorial_loop
  LoopTerminator consent_Tutorial
  LoopInitiator consent_Bye loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = consent_not_given
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    LoopInitiator bye_loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine bye_message
    LoopTerminator bye_loop
  LoopTerminator consent_Bye
  Routine dep
  LoopInitiator trials_words loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = word_list_main.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Words': 'MASA'},
      {'Words': 'CAM'},
      {'Words': 'SU'},
      {'Words': 'İYİLİK'},
      {'Words': 'TÜTÜN'},
      {'Words': 'KELİME'},
      {'Words': 'MASA'},
      {'Words': 'KALE'},
      {'Words': 'KÖPEK'},
      {'Words': 'KAĞIT'},
      {'Words': 'BİNA'},
      {'Words': 'PARK'},
      {'Words': 'KOLAY'},
      {'Words': 'BEYİN'},
      {'Words': 'ÖLÇEK'},
      {'Words': 'AĞAÇ'},
      {'Words': 'EKRAN'},
      {'Words': 'YAZI'},
      {'Words': 'RAKAM'},
      {'Words': 'KALEM'},
      {'Words': 'ŞİŞE'},
      {'Words': 'BARDAK'},
      {'Words': 'SARI'},
      {'Words': 'ÇANTA'},
      {'Words': 'MESAJ'},
      {'Words': 'TOPLU'},
      {'Words': 'KISA'},
      {'Words': 'BÜYÜK'},
      {'Words': 'KAPI'},
      {'Words': 'GRUP'},
      {'Words': 'DEFTER'},
      {'Words': 'SPOR'},
      {'Words': 'İLAÇ'},
      {'Words': 'KEDİ'},
      {'Words': 'TERLİK'},
      {'Words': 'ELMA'},
      {'Words': 'TABAK'},
      {'Words': 'CÜZDAN'},
      {'Words': 'SEHPA'},
      {'Words': 'KOLTUK'},
      {'Words': 'KAŞIK'},
      {'Words': 'ŞİŞE'},
      {'Words': 'KAPI'},
      {'Words': 'FIRIN'},
      {'Words': 'KÜÇÜK'},
      {'Words': 'TOPRAK'},
      {'Words': 'HALI'},
      {'Words': 'DOLAP'},
      {'Words': 'ÇİÇEK'},
      {'Words': 'KİTAP'},
      {'Words': 'ODA'},
      {'Words': 'CAM'},
      {'Words': 'LAMBA'},
      {'Words': 'DÜĞME'},
      {'Words': 'PARKUR'},
      {'Words': 'DUVAR'},
      {'Words': 'KOKU'},
      {'Words': 'YATAK'},
      {'Words': 'SALÇA'},
      {'Words': 'KALAS'},
      {'Words': 'SAAT'},
      {'Words': 'MEKTUP'},
      {'Words': 'KALIP'},
      {'Words': 'ZEMİN'},
      {'Words': 'HARİTA'},
      {'Words': 'PARA'},
      {'Words': 'KUTU'},
      {'Words': 'ÇORAP'},
      {'Words': 'TERAS'},
      {'Words': 'DERGİ'},
      {'Words': 'TAHTA'},
      {'Words': 'FIRIN'},
      {'Words': 'SİLGİ'},
      {'Words': 'MARKET'},
      {'Words': 'KASA'},
      {'Words': 'BAHÇE'},
      {'Words': 'SIRA'},
      {'Words': 'HALKA'}]
    Routine trial_Word_Display
  LoopTerminator trials_words
  Routine clock_start
  LoopInitiator recall_trial loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine recall_Trial
  LoopTerminator recall_trial
  Routine proceed_study
  LoopInitiator list1_words loopType="TrialHandler"
    Selected rows = 6:24
    conditionsFile = word_list_main.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words': 'T1'},
      {'Words': 'T2'},
      {'Words': 'T3'},
      {'Words': 'T4'},
      {'Words': 'T5'},
      {'Words': 'T6'},
      {'Words': 'A1'},
      {'Words': 'A2'},
      {'Words': 'A3'},
      {'Words': 'A4'},
      {'Words': 'A5'},
      {'Words': 'A6'},
      {'Words': 'A7'},
      {'Words': 'A8'},
      {'Words': 'A9'},
      {'Words': 'A10'},
      {'Words': 'A11'},
      {'Words': 'A12'},
      {'Words': 'A13'},
      {'Words': 'A14'},
      {'Words': 'A15'},
      {'Words': 'A16'},
      {'Words': 'A17'},
      {'Words': 'A18'},
      {'Words': 'B1'},
      {'Words': 'B2'},
      {'Words': 'B3'},
      {'Words': 'B4'},
      {'Words': 'B5'},
      {'Words': 'B6'},
      {'Words': 'B7'},
      {'Words': 'B8'},
      {'Words': 'B9'},
      {'Words': 'B10'},
      {'Words': 'B11'},
      {'Words': 'B12'},
      {'Words': 'B13'},
      {'Words': 'B14'},
      {'Words': 'B15'},
      {'Words': 'B16'},
      {'Words': 'B17'},
      {'Words': 'B18'},
      {'Words': 'C1'},
      {'Words': 'C2'},
      {'Words': 'C3'},
      {'Words': 'C4'},
      {'Words': 'C5'},
      {'Words': 'C6'},
      {'Words': 'C7'},
      {'Words': 'C8'},
      {'Words': 'C9'},
      {'Words': 'C10'},
      {'Words': 'C11'},
      {'Words': 'C12'},
      {'Words': 'C13'},
      {'Words': 'C14'},
      {'Words': 'C15'},
      {'Words': 'C16'},
      {'Words': 'C17'},
      {'Words': 'C18'},
      {'Words': 'D1'},
      {'Words': 'D2'},
      {'Words': 'D3'},
      {'Words': 'D4'},
      {'Words': 'D5'},
      {'Words': 'D6'},
      {'Words': 'D7'},
      {'Words': 'D8'},
      {'Words': 'D9'},
      {'Words': 'D10'},
      {'Words': 'D11'},
      {'Words': 'D12'},
      {'Words': 'D13'},
      {'Words': 'D14'},
      {'Words': 'D15'},
      {'Words': 'D16'},
      {'Words': 'D17'},
      {'Words': 'D18'}]
    Routine study_list1
  LoopTerminator list1_words
  Routine clock_start_list_1
  LoopInitiator recall_list_1 loopType="TrialHandler"
    loopType = random
    nReps = 18
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    Routine recall_list1
  LoopTerminator recall_list_1
  Routine proceed_bridge
  LoopInitiator list2_words loopType="TrialHandler"
    Selected rows = 24:42
    conditionsFile = word_list_main.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Words': 'T1'},
      {'Words': 'T2'},
      {'Words': 'T3'},
      {'Words': 'T4'},
      {'Words': 'T5'},
      {'Words': 'T6'},
      {'Words': 'A1'},
      {'Words': 'A2'},
      {'Words': 'A3'},
      {'Words': 'A4'},
      {'Words': 'A5'},
      {'Words': 'A6'},
      {'Words': 'A7'},
      {'Words': 'A8'},
      {'Words': 'A9'},
      {'Words': 'A10'},
      {'Words': 'A11'},
      {'Words': 'A12'},
      {'Words': 'A13'},
      {'Words': 'A14'},
      {'Words': 'A15'},
      {'Words': 'A16'},
      {'Words': 'A17'},
      {'Words': 'A18'},
      {'Words': 'B1'},
      {'Words': 'B2'},
      {'Words': 'B3'},
      {'Words': 'B4'},
      {'Words': 'B5'},
      {'Words': 'B6'},
      {'Words': 'B7'},
      {'Words': 'B8'},
      {'Words': 'B9'},
      {'Words': 'B10'},
      {'Words': 'B11'},
      {'Words': 'B12'},
      {'Words': 'B13'},
      {'Words': 'B14'},
      {'Words': 'B15'},
      {'Words': 'B16'},
      {'Words': 'B17'},
      {'Words': 'B18'},
      {'Words': 'C1'},
      {'Words': 'C2'},
      {'Words': 'C3'},
      {'Words': 'C4'},
      {'Words': 'C5'},
      {'Words': 'C6'},
      {'Words': 'C7'},
      {'Words': 'C8'},
      {'Words': 'C9'},
      {'Words': 'C10'},
      {'Words': 'C11'},
      {'Words': 'C12'},
      {'Words': 'C13'},
      {'Words': 'C14'},
      {'Words': 'C15'},
      {'Words': 'C16'},
      {'Words': 'C17'},
      {'Words': 'C18'},
      {'Words': 'D1'},
      {'Words': 'D2'},
      {'Words': 'D3'},
      {'Words': 'D4'},
      {'Words': 'D5'},
      {'Words': 'D6'},
      {'Words': 'D7'},
      {'Words': 'D8'},
      {'Words': 'D9'},
      {'Words': 'D10'},
      {'Words': 'D11'},
      {'Words': 'D12'},
      {'Words': 'D13'},
      {'Words': 'D14'},
      {'Words': 'D15'},
      {'Words': 'D16'},
      {'Words': 'D17'},
      {'Words': 'D18'}]
    Routine study_list2
  LoopTerminator list2_words
  Routine suffix_play
  Routine clock_start_list_2
  LoopInitiator recall_list_2 loopType="TrialHandler"
    loopType = random
    nReps = 18
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    Routine recall_list2
  LoopTerminator recall_list_2
  Routine proceed_bridge_2
  LoopInitiator list3_words loopType="TrialHandler"
    Selected rows = 42:60
    conditionsFile = word_list_main.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine study_list3
  LoopTerminator list3_words
  Routine clock_start_list_3
  LoopInitiator recall_list_3 loopType="TrialHandler"
    loopType = random
    nReps = 18
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    Routine recall_list3
  LoopTerminator recall_list_3
  Routine proceed_birdge_3
  LoopInitiator list4_words loopType="TrialHandler"
    Selected rows = 60:78
    conditionsFile = word_list_main.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine study_list4
  LoopTerminator list4_words
  Routine clock_start_list_4
  Routine suffix_play_2
  LoopInitiator recall_list_4 loopType="TrialHandler"
    Selected rows = 61:78
    conditionsFile = word_list_main.xlsx
    loopType = random
    nReps = 18
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    conditions:
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    Routine recall_list4
  LoopTerminator recall_list_4
  Routine end
